<CompuCell3D Revision="20171208" Version="3.7.7">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="200" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>3</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Bacterium"/>
      <CellType TypeId="2" TypeName="Macrophage"/>
      <CellType TypeId="3" TypeName="Red"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Bacterium">10.0</Energy>
      <Energy Type1="Medium" Type2="Macrophage">10.0</Energy>
      <Energy Type1="Medium" Type2="Red">10.0</Energy>
      <Energy Type1="Bacterium" Type2="Bacterium">10.0</Energy>
      <Energy Type1="Bacterium" Type2="Macrophage">10.0</Energy>
      <Energy Type1="Bacterium" Type2="Red">10.0</Energy>
      <Energy Type1="Macrophage" Type2="Macrophage">10.0</Energy>
      <Energy Type1="Macrophage" Type2="Red">10.0</Energy>
      <Energy Type1="Red" Type2="Red">10.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="ATTR" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="200.0" Type="Macrophage"/>
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
     <DiffusionField Name="ATTR">
       <DiffusionData>
           <FieldName>ATTR</FieldName>
           <GlobalDiffusionConstant>1.0</GlobalDiffusionConstant>
           <GlobalDecayConstant>1e-05</GlobalDecayConstant>
       </DiffusionData>
       <SecretionData>
           <Secretion Type="Bacterium">0.1</Secretion>
       </SecretionData>
     </DiffusionField>
   </Steppable>

</CompuCell3D>
